PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = DELAY DISCOUNTING
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward)+ " after " + str(delay)+ " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CONDITIONS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 12, 'future_reward': 25, 'delay': 5},
      {'reward_today': 18, 'future_reward': 32, 'delay': 9},
      {'reward_today': 20, 'future_reward': 38, 'delay': 12},
      {'reward_today': 25, 'future_reward': 45, 'delay': 16},
      {'reward_today': 28, 'future_reward': 48, 'delay': 20},
      {'reward_today': 30, 'future_reward': 52, 'delay': 25},
      {'reward_today': 33, 'future_reward': 55, 'delay': 30},
      {'reward_today': 35, 'future_reward': 60, 'delay': 35},
      {'reward_today': 37, 'future_reward': 65, 'delay': 40},
      {'reward_today': 39, 'future_reward': 68, 'delay': 45},
      {'reward_today': 42, 'future_reward': 70, 'delay': 50},
      {'reward_today': 45, 'future_reward': 72, 'delay': 55},
      {'reward_today': 47, 'future_reward': 74, 'delay': 60},
      {'reward_today': 50, 'future_reward': 76, 'delay': 65},
      {'reward_today': 53, 'future_reward': 78, 'delay': 70},
      {'reward_today': 55, 'future_reward': 80, 'delay': 75},
      {'reward_today': 58, 'future_reward': 82, 'delay': 80},
      {'reward_today': 60, 'future_reward': 84, 'delay': 85},
      {'reward_today': 62, 'future_reward': 86, 'delay': 90},
      {'reward_today': 64, 'future_reward': 88, 'delay': 95}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
    Routine trial
  LoopTerminator trials
