PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = ORIENTATION DISCRIMINATION TASK
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 8
      size = (0.2, 0.2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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      text:
        Welcome to this experiment
        In this experiment, you'll see a series of striped patterns (gratings)
        If the grating is STRAIGHT, press the UP ARROW key.

        If the grating is TILTED, press the DOWN ARROW key.
  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you so much for participating in the experiment
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine thank_you
