PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = MereExposurePilot
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine intr
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome. In this study you will see faces briefly and make quick judgments.
        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exposure_routine
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    ImageComponent exposureRoutine
      color = 1.0000, 1.0000, 1.0000
      flipHoriz = True
      image [set every repeat] = $imagefile
      ori [set every repeat] = tilt
      size = (0.8,0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent tilt_kb
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instr
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = “Is the face tilted left or right? Press left [<-] or right [->].”
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('tilt', tilt)
  Routine liking
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent faceimage_test
      image [set every repeat] = $imagefile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent prompt
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Rate likability: 1 (Not at all) - 4 (Very likable). Press 1–4.
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    KeyboardComponent rating_kb
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = THANK YOU FOR PARTICPATING!!
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Flow
  Routine intr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = EXPOSURE_TRAILS.xlsx
    loopType = random
    nReps = 7
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    conditions:
      [{'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F01', 'imagefile': 'images/F01_happy.JPG', 'valence': 'happy', 'old_status': 'old', 'tilt': 7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F02', 'imagefile': 'images/F02_happy.JPG', 'valence': 'happy', 'old_status': 'old', 'tilt': -7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F03', 'imagefile': 'images/F03_happy.JPG', 'valence': 'happy', 'old_status': 'old', 'tilt': 7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F04', 'imagefile': 'images/F04_happy.JPG', 'valence': 'happy', 'old_status': 'old', 'tilt': -7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F05', 'imagefile': 'images/F05_happy.JPG', 'valence': 'happy', 'old_status': 'old', 'tilt': 7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F06', 'imagefile': 'images/F06_neutral.JPG', 'valence': 'neutral', 'old_status': 'old', 'tilt': -7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F07', 'imagefile': 'images/F07_neutral.JPG', 'valence': 'neutral', 'old_status': 'old', 'tilt': 7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F08', 'imagefile': 'images/F08_neutral.JPG', 'valence': 'neutral', 'old_status': 'old', 'tilt': -7},
      {'phase': 'exposure', 'trial_type': 'tilt_task', 'face_id': 'F09', 'imagefile': 'images/F09_neutral.JPG', 'valence': 'neutral', 'old_status': 'old', 'tilt': 7}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
    Routine exposure_routine
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TEST_TRIALS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'phase': 'test', 'trial_type': 'rating', 'face_id': 'F01', 'imagefile': 'images/F01_happy.JPG', 'valence': 'happy', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F02', 'imagefile': 'images/F02_happy.JPG', 'valence': 'happy', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F03', 'imagefile': 'images/F03_happy.JPG', 'valence': 'happy', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F04', 'imagefile': 'images/F04_happy.JPG', 'valence': 'happy', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F05', 'imagefile': 'images/F05_happy.JPG', 'valence': 'happy', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F06', 'imagefile': 'images/F06_neutral.JPG', 'valence': 'neutral', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F07', 'imagefile': 'images/F07_neutral.JPG', 'valence': 'neutral', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F08', 'imagefile': 'images/F08_neutral.JPG', 'valence': 'neutral', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F09', 'imagefile': 'images/F09_neutral.JPG', 'valence': 'neutral', 'old_status': 'old'},
      {'phase': 'test', 'trial_type': 'rating', 'face_id': 'F10', 'imagefile': 'images/F10_neutral.JPG', 'valence': 'neutral', 'old_status': 'old'}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
    Routine liking
  LoopTerminator trials_2
  Routine thanks
