PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 800]
  expName = Stroop Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent text
      color [set every repeat] = $font_color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = WELCOME TO THE EXPERIMENT
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = THANK YOU SO MUCH FOR PARTICIPATING
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = DATA FILE FOR STROOP EFFECT.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'word': 'RED', 'font_color': 'red', 'con_label': 'congruent', 'corr_resp': 'r'},
      {'word': 'BLUE', 'font_color': 'blue', 'con_label': 'congruent', 'corr_resp': 'b'},
      {'word': 'RED', 'font_color': 'blue', 'con_label': 'incongruent', 'corr_resp': 'b'},
      {'word': 'BLUE', 'font_color': 'red', 'con_label': 'incongruent', 'corr_resp': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine Thanks
