PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = WORD PRIMING
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CONDITIONS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'laptop'},
      {'Study_word': 'chart'},
      {'Study_word': 't-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'pastry'},
      {'Study_word': 'case'},
      {'Study_word': 'cruise'},
      {'Study_word': 'police'},
      {'Study_word': 'keys'},
      {'Study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TEST CONDITIONS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Refrence': 'laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'Refrence': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'Refrence': 'tshirt', 'old_new': 'old'},
      {'test_word': '_o_se', 'Refrence': 'mouse', 'old_new': 'old'},
      {'test_word': 'p_str_', 'Refrence': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Refrence': 'case', 'old_new': 'old'},
      {'test_word': '_ru_s_', 'Refrence': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'Refrence': 'police', 'old_new': 'old'},
      {'test_word': 'K_y_', 'Refrence': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'Refrence': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Refrence': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Refrence': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Refrence': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Refrence': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io_', 'Refrence': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Refrence': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Refrence': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Refrence': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Refrence': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Refrence': 'camera', 'old_new': 'new'}]
    Routine Test_Phase
  LoopTerminator trials_2
